CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<Tiempo>Placa_[^\\/]+)
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<Tratamiento>Control|Dubermatinib)
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:H2AX_A549
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    Set intensity range from:Manual
    Assignments count:1
    Single images count:0
    Maximum intensity:255.0
    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Tiempo
    Metadata category:Tratamiento

ColorToGray:[module_num:5|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
    Select the input image:H2AX_A549
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:Yes
    Name the output image:Focos_H2AX
    Convert blue to gray?:Yes
    Name the output image:Nucleos
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Nucleos
    Name the primary objects to be identified:Nucleos
    Typical diameter of objects, in pixel units (Min,Max):50,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:7|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
    Select object sets to measure:Nucleos
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:8|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
    Select the objects to filter:Nucleos
    Name the output objects:Nucleos_redondos
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.7
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:Focos_H2AX
    Name the primary objects to be identified:Focos
    Typical diameter of objects, in pixel units (Min,Max):1,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:Focos
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:11|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
    Select the objects to filter:Focos
    Name the output objects:Focos_redondos
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.7
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
MeasureObjectIntensity:[module_num:12|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
    Select images to measure:Focos_H2AX
    Select objects to measure:Focos_redondos

FilterObjects:[module_num:13|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
    Select the objects to filter:Focos_redondos
    Name the output objects:Focos_redondos_intensos
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Focos_H2AX
    Filter using a minimum measurement value?:Yes
    Minimum value:0.06
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:14|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
    Parent objects:Nucleos_redondos
    Child objects:Focos_redondos_intensos
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Focos_dentro_de_nucleos
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
ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop\\Output CellProfiler\\Prueba 12
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:gH2AX_A549_
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
